opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_15: {model: 96-flat, slot: 11}
  Bacillus_subtilis_0: {model: 96-flat, slot: 1}
  Mesoplasma_florum_0: {model: 96-flat, slot: 2}
  Mycoplasma_pneumonia_0: {model: 96-flat, slot: 3}
  Mycoplasma_genitalium_0: {model: 96-flat, slot: 4}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Bacillus_subtilis_0, well: D5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: A7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: F5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: C12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: H10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: C10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: D9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: C11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_15, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: C12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
