opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_17: {model: 96-flat, slot: 11}
  Mycoplasma_genitalium_0: {model: 96-flat, slot: 1}
  Mesoplasma_florum_0: {model: 96-flat, slot: 2}
  Mycoplasma_pneumonia_0: {model: 96-flat, slot: 3}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: E12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: F3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: E12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: F12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: B6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: G12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_0, well: H3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: B11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: G12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: C9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: D1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_17, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_0, well: H8}
