opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_21: {model: 96-flat, slot: 11}
  Mesoplasma_florum_1: {model: 96-flat, slot: 1}
  Mycoplasma_pneumonia_1: {model: 96-flat, slot: 2}
  Mycoplasma_genitalium_1: {model: 96-flat, slot: 3}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: E12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: D3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: F11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: E12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: F8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: C7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_21, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: A12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
