opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  glycerol-plate_24: {model: 96-flat, slot: 11}
  Mesoplasma_florum_1: {model: 96-flat, slot: 1}
  Mycoplasma_pneumonia_1: {model: 96-flat, slot: 2}
  Mycoplasma_genitalium_1: {model: 96-flat, slot: 3}
procedure:
-
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: G12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: H8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: F12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: G12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: H9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: C12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_24, well: G6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_1, well: D7}
