opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_3: {model: 96-flat, slot: 11}
  Mycoplasma_syn3_1: {model: 96-flat, slot: 1}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: B12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: C12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: D12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: E12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: D12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: F12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: F8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: E12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: G12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: A9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: F9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_3, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_1, well: H7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
