opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_5: {model: 96-flat, slot: 11}
  Mycoplasma_syn3_2: {model: 96-flat, slot: 1}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: H4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: H5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: D12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: C5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: E2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: G12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: G5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: A3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: E12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: F5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: B6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: A4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: E5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: D5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: C2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: F12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_5, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_syn3_2, well: G2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
