{
 "protocol-schema": "1.0.0",
 "metadata": {
  "protocol-name": "Example transfer protocol",
  "author": "Keoni Gandall"
 },
 "default-values": {
  "aspirate-flow-rate": {
   "p10_single": 5,
   "p10_multi": 5,
   "p50_single": 25,
   "p50_multi": 25,
   "p300_single": 150,
   "p300_multi": 150,
   "p1000_single": 500
  },
  "dispense-flow-rate": {
   "p10_single": 10,
   "p10_multi": 10,
   "p50_single": 50,
   "p50_multi": 50,
   "p300_single": 300,
   "p300_multi": 300,
   "p1000_single": 1000
  },
  "aspirate-mm-from-bottom": 1,
  "dispense-mm-from-bottom": 0.5,
  "touch-tip-mm-from-top": -1
 },
 "designer-application": {
  "application-name": "opentrons_json",
  "application-version": "1.0.0",
  "data": {}
 },
 "robot": {
  "model": "OT-2 Standard"
 },
 "pipettes": {
  "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48": {
   "type": "pipette",
   "mount": "left",
   "name": "p300_single",
   "model": "p300_single_v1.3"
  }
 },
 "labware": {
  "tip_box": {
   "slot": "10",
   "model": "opentrons-tiprack-300ul",
   "name": "300ul tip box"
  },
  "glycerol-plate_6": {
   "slot": "11",
   "model": "96-flat",
   "name": "glycerol-plate_6"
  },
  "Mycoplasma_syn3_2": {
   "slot": "1",
   "model": "96-flat",
   "name": "Mycoplasma_syn3_2"
  }
 },
 "procedure": [
  {
   "subprocedure": [
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "E1"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G3"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "D6"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G4"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "E6"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G5"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "F1"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G6"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "F3"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G7"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "B3"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G8"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "C2"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G9"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "C5"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G10"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "A1"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G11"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "H6"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "G12"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "C1"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "H1"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "H5"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "H2"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "glycerol-plate_6",
      "well": "A3"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "fc0b0f9b-d3c5-4f1f-9c91-53968b954d48",
      "volume": 50,
      "labware": "Mycoplasma_syn3_2",
      "well": "H3"
     }
    }
   ]
  }
 ]
}
