{"protocol-schema": "1.0.0", "metadata": {"protocol-name": "Example transfer protocol", "author": "Keoni Gandall"}, "default-values": {"aspirate-flow-rate": {"p10_single": 5, "p10_multi": 5, "p50_single": 25, "p50_multi": 25, "p300_single": 150, "p300_multi": 150, "p1000_single": 500}, "dispense-flow-rate": {"p10_single": 10, "p10_multi": 10, "p50_single": 50, "p50_multi": 50, "p300_single": 300, "p300_multi": 300, "p1000_single": 1000}, "aspirate-mm-from-bottom": 1, "dispense-mm-from-bottom": 0.5, "touch-tip-mm-from-top": -1}, "designer-application": {"application-name": "opentrons_json", "application-version": "1.0.0", "data": {}}, "robot": {"model": "OT-2 Standard"}, "pipettes": {"9096f486-219c-4f9e-8da7-f173c8c5f36b": {"type": "pipette", "mount": "left", "name": "p300_single", "model": "p300_single_v1.3"}}, "labware": {"tip_box": {"slot": "10", "model": "opentrons-tiprack-300ul", "name": "300ul tip box"}, "trash": {"slot": "12", "model": "fixed-trash", "name": "Trash yo"}, "glycerol-plate_8": {"slot": "11", "model": "96-flat", "name": "glycerol-plate_8"}, "Mycoplasma_syn3_2": {"slot": "1", "model": "96-flat", "name": "Mycoplasma_syn3_2"}}, "procedure": [{"subprocedure": [{"command": "pick-up-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "tip_box", "well": "A1"}}, {"command": "aspirate", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "glycerol-plate_8", "well": "E2"}}, {"command": "dispense", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "Mycoplasma_syn3_2", "well": "H4"}}, {"command": "drop-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "trash", "well": "A1"}}, {"command": "pick-up-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "tip_box", "well": "A2"}}, {"command": "aspirate", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "glycerol-plate_8", "well": "F3"}}, {"command": "dispense", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "Mycoplasma_syn3_2", "well": "H5"}}, {"command": "drop-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "trash", "well": "A1"}}, {"command": "pick-up-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "tip_box", "well": "A3"}}, {"command": "aspirate", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "glycerol-plate_8", "well": "G2"}}, {"command": "dispense", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "volume": 50, "labware": "Mycoplasma_syn3_2", "well": "H6"}}, {"command": "drop-tip", "params": {"pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b", "labware": "trash", "well": "A1"}}]}]}