{
 "protocol-schema": "1.0.0",
 "metadata": {
  "protocol-name": "Example transfer protocol",
  "author": "Keoni Gandall"
 },
 "default-values": {
  "aspirate-flow-rate": {
   "p10_single": 5,
   "p10_multi": 5,
   "p50_single": 25,
   "p50_multi": 25,
   "p300_single": 150,
   "p300_multi": 150,
   "p1000_single": 500
  },
  "dispense-flow-rate": {
   "p10_single": 10,
   "p10_multi": 10,
   "p50_single": 50,
   "p50_multi": 50,
   "p300_single": 300,
   "p300_multi": 300,
   "p1000_single": 1000
  },
  "aspirate-mm-from-bottom": 1,
  "dispense-mm-from-bottom": 0.5,
  "touch-tip-mm-from-top": -1
 },
 "designer-application": {
  "application-name": "opentrons_json",
  "application-version": "1.0.0",
  "data": {}
 },
 "robot": {
  "model": "OT-2 Standard"
 },
 "pipettes": {
  "9096f486-219c-4f9e-8da7-f173c8c5f36b": {
   "type": "pipette",
   "mount": "left",
   "name": "p300_single",
   "model": "p300_single_v1.3"
  }
 },
 "labware": {
  "tip_box": {
   "slot": "10",
   "model": "opentrons-tiprack-300ul",
   "name": "300ul tip box"
  },
  "trash": {
   "slot": "12",
   "model": "fixed-trash",
   "name": "Trash yo"
  },
  "glycerol-plate_22": {
   "slot": "11",
   "model": "96-flat",
   "name": "glycerol-plate_22"
  },
  "Mesoplasma_florum_1": {
   "slot": "1",
   "model": "96-flat",
   "name": "Mesoplasma_florum_1"
  },
  "Mycoplasma_pneumonia_1": {
   "slot": "2",
   "model": "96-flat",
   "name": "Mycoplasma_pneumonia_1"
  }
 },
 "procedure": [
  {
   "subprocedure": [
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A1"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "E6"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mesoplasma_florum_1",
      "well": "F12"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    },
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A2"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "D6"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mesoplasma_florum_1",
      "well": "G1"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    },
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A3"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "A5"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mesoplasma_florum_1",
      "well": "G2"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    },
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A1"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "A12"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mycoplasma_pneumonia_1",
      "well": "F1"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    },
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A2"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "E11"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mycoplasma_pneumonia_1",
      "well": "F2"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    },
    {
     "command": "pick-up-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "tip_box",
      "well": "A3"
     }
    },
    {
     "command": "aspirate",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "glycerol-plate_22",
      "well": "A10"
     }
    },
    {
     "command": "dispense",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "volume": 50,
      "labware": "Mycoplasma_pneumonia_1",
      "well": "F3"
     }
    },
    {
     "command": "drop-tip",
     "params": {
      "pipette": "9096f486-219c-4f9e-8da7-f173c8c5f36b",
      "labware": "trash",
      "well": "A1"
     }
    }
   ]
  }
 ]
}
