opentrons_json 1.0.0
protocol-schema: 1.0.0
protocol-name: Example transfer protocol
author: Keoni Gandall
default-values: {aspirate-flow-rate: {p10_single: 5, p10_multi: 5, p50_single: 25, p50_multi: 25, p300_single: 150, p300_multi: 150, p1000_single: 500}, dispense-flow-rate: {p10_single: 10, p10_multi: 10, p50_single: 50, p50_multi: 50, p300_single: 300, p300_multi: 300, p1000_single: 1000}, aspirate-mm-from-bottom: 1, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p300_single: {model: p300_single_v1.3, mount: left}
labware:
  tip_box: {name: 300ul tip box, model: opentrons-tiprack-300ul, slot: 10}
  trash: {name: Trash yo, model: fixed-trash, slot: 12}
  glycerol-plate_20: {model: 96-flat, slot: 11}
  Mycoplasma_genitalium_0: {model: 96-flat, slot: 1}
  Mesoplasma_florum_1: {model: 96-flat, slot: 2}
  Mycoplasma_pneumonia_1: {model: 96-flat, slot: 3}
procedure:
-
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: A6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F6}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_genitalium_0, well: H12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: A5}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: B10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: B11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: B12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: A1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: A2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: C12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G3}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D7}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C4}
  - dispense: {pipette: p300_single, volume: 50, labware: Mesoplasma_florum_1, well: D8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: B9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: B10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: B11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: B12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: A10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: D10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: E10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: A12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C10}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B3}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C11}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B4}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: C12}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B5}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: C11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D1}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B6}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D2}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B7}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F11}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D3}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B8}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D4}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B9}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D5}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B10}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: B2}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D6}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B11}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: H9}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D7}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: B12}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G8}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D8}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C1}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: F12}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D9}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
  - pick-up-tip: {pipette: p300_single, labware: tip_box, well: C2}
  - aspirate: {pipette: p300_single, volume: 50, labware: glycerol-plate_20, well: G1}
  - dispense: {pipette: p300_single, volume: 50, labware: Mycoplasma_pneumonia_1, well: D10}
  - drop-tip: {pipette: p300_single, labware: trash, well: A1}
